PsychoPy2experiment version="2021.2.3"
Settings
  Data filename = u'data' + os.path.sep + '%s_%s' %(expInfo['participant'], expInfo['date'])
  Experiment info = {'participant': '', 'session': '', 'study': '', 'group': '', 'qpid': ''}
  Full-screen window = True
  Monitor = testMonitor
  Resources = ['blocks/blocks_order.xlsx', 'blocks/conds_file_4_demo.xlsx', 'blocks/conds_file_3_demo.xlsx', 'blocks/conds_file_2_demo.xlsx', 'blocks/conds_file_1_demo.xlsx', 'blocks/blocks_order_demo.xlsx', 'blocks/conds_file_4.xlsx', 'blocks/conds_file_3.xlsx', 'blocks/conds_file_2.xlsx', 'blocks/conds_file_1.xlsx', 'img/p100.png', 'img/p75.png', 'img/p50.png', 'img/p25.png', 'img/go.png', 'img/start.png', 'img/instru0.png', 'img/instru1.png', 'img/instru2.png', 'img/instru3.png', 'img/solid.png', 'img/empty.png', 'img/instru0.png', 'conds_file_5.xlsx', 'conds_file_1.xlsx', 'conds_file_2.xlsx', 'conds_file_3.xlsx', 'conds_file_4.xlsx', 'blocks_order1.xlsx', 'img/empty.png', 'img/instru1.png', 'img/instru1.svg', 'img/instru2.png', 'img/instruction.png', 'img/solid.png']
  Screen = 1
  Units = height
  Window size (pixels) = [1920, 1080]
  color = black
  expName = Circle Motor
  logging level = debug
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Routines
  Routine feedback
    CodeComponent generate_msg
      Code Type = Auto->JS
    ImageComponent feedback_image
      image = None
      size = (0.3, 0.3)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
      texture resolution = 512
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  Routine end_thanks
    TextComponent thanks_text
      letterHeight = 0.06
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 5
      units = height
      wrapWidth = 0.6
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      text:
        Thanks for playing.

        Do NOT press the ‘escape’ key.

        Saving results, please wait…
  Routine keep_in_mind
    TextComponent keep_in_mind_txt
      letterHeight = 0.04
      startVal [time (s)] = 0.0
      units = height
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      text:
        Keep in mind:

        1) Labels at the top of the screen indicate which catogory goes with which key.

        2) Each word or image has a correct catogory classification

        3) Keep your index fingers on the A and L keys to enable a rapid response.

        4) The test gives no results if you go slow- please try to go as fast as possible
    KeyboardComponent keep_in_mind_done
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      store = nothing
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    PolygonComponent keep_in_btn
      fillColor = lightgreen
      lineColor = darkgreen
      pos = (0, -0.4)
      shape = rectangle
      size = (0.4, 0.1)
      startVal [time (s)] = 0.0
      units = height
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    TextComponent keep_in_label
      color = darkgreen
      letterHeight = 0.08
      pos = (0, -0.4)
      startVal [time (s)] = 0.0
      text = Next...
      units = height
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    MouseComponent mouse
      clickable = keep_in_btn
      forceEndRoutineOnPress = valid click
      saveMouseState = never
      saveStartStop = False
      startVal [time (s)] = 0.0
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  Routine instructions
    CodeComponent set_block_order
      Code Type = Both
      Begin Experiment:
        #if expInfo['order']=='random':
        #    expInfo['order'] = randint(1,2)
        #
        #blocks_file = "blocks_order"+str(expInfo['order'])+".xlsx"
      Begin JS Experiment:
        //  if ((expInfo["order"] === "random")) {
        //      expInfo["order"] = (Math.floor((Math.random() * ((2 - 1) + 1))) + 1);
        //  }
        //  blocks_file = (("blocks_order" + expInfo["order"].toString()) + ".xlsx");
    TextComponent instructs_text
      letterHeight = 0.04
      pos = [0, 0.3]
      saveStartStop = False
      startVal [time (s)] = 0.0
      text [set every repeat] = $Instruction
      units = height
      wrapWidth = 0.6
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    KeyboardComponent instruct_done
      allowedKeys = 'space'
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.0
      store = nothing
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    PolygonComponent instr_done_button
      fillColor = lightgreen
      lineColor = darkgreen
      pos = (0, -0.4)
      shape = rectangle
      size = (0.4, 0.1)
      startVal [time (s)] = 0.0
      units = height
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    TextComponent instr_done_label
      color = darkgreen
      letterHeight = 0.05
      pos = (0, -0.4)
      startVal [time (s)] = 0.0
      text = Next...
      units = height
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    MouseComponent instr_done_touch
      clickable = instr_done_button
      forceEndRoutineOnPress = valid click
      saveMouseState = final
      startVal [time (s)] = 0.0
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    ImageComponent image_3
      image [set every repeat] = $Images
      size = (0.3, 0.3)
      startVal [time (s)] = 0.0
      texture resolution = 512
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  Routine pop_2
    CodeComponent generate_msg_2
      Code Type = Both
      Begin JS Routine:
        var click_x, click_y;
        [click_x, click_y] = mouse_loc;
        solid_in = false;
        empty_in = false;
        both_in = false;
        hsize = (size / 2);
        if (((Math.abs((click_y - solid_y)) <= hsize) && (Math.abs((click_y - empty_y)) <= hsize))) {
            solid_in = true;
            empty_in = true;
        } else {
            if (((Math.abs((click_y - solid_y)) <= hsize) && (Math.abs((click_y - empty_y)) > hsize))) {
                solid_in = true;
            } else {
                if (((Math.abs((click_y - solid_y)) > hsize) && (Math.abs((click_y - empty_y)) <= hsize))) {
                    empty_in = true;
                }
            }
        }
        if (((solid_in === true) && (empty_in === true))) {
            both_in = true;
        }
        if (((solid_in === true) && (both_in === false))) {
            msg = "Lose! \n-200";
            points -= 200;
        } else {
            if (((empty_in === true) && (both_in === false))) {
                msg = "Win! \n+100";
                points += 100;
            } else {
                if ((both_in === true)) {
                    msg = "Lose! \n-200";
                    points -= 200;
                } else {
                    msg = "None";
                    points += 0;
                }
            }
        }
        text.setText(msg);
        //point0.setText(("points: " + points.toString()));
        //point1.setText(("points: " + points.toString()));
        //point3.setText(("points: " + points.toString()));
        thisExp.addData("points", points);
        thisExp.addData("circle_solid", solid_in);
        thisExp.addData("circle_empty", empty_in);
        thisExp.addData("circle_both", both_in);
        thisExp.addData("solid_y", solid_y);
        thisExp.addData("click_y", click_y);
        thisExp.addData("empty_y", empty_y);
        thisExp.addData("hsize", hsize);
      Begin Routine:
        # mouse loc split
        click_x, click_y = mouse_loc

        # check x location
        solid_in = False
        empty_in = False
        both_in = False
        hsize = size/2

        if abs(click_y-solid_y) <= hsize and abs(click_y-empty_y) <= hsize:
            solid_in = True
            empty_in = True
        elif abs(click_y-solid_y) <= hsize and abs(click_y-empty_y) > hsize:
            solid_in = True
        elif abs(click_y-solid_y) > hsize and abs(click_y-empty_y) <= hsize:
            empty_in = True

        # check if both in
        if solid_in==True and empty_in==True:
            both_in = True

        # make msg
        if solid_in==True and both_in==False:
            msg = 'Lose! \n-200'
            points -= 200
        elif empty_in==True and both_in==False:
            msg = 'Win! \n+100'
            points += 100
        elif both_in is True:
            msg = 'Lose! \n-200'
            points -= 200
        else:
            msg = 'None'
            points += 0

        # print msg
        text.setText(msg)

        # print points
        #point0.setText('points: '+str(points))
        #point1.setText('points: '+str(points))
        #point3.setText('points: '+str(points))

        # saving
        thisExp.addData('points', points)
        thisExp.addData('circle_solid', solid_in)
        thisExp.addData('circle_empty', empty_in)
        thisExp.addData('circle_both', both_in)
        thisExp.addData('solid_y', solid_y)
        thisExp.addData('click_y', click_y)
        thisExp.addData('empty_y', empty_y)
        thisExp.addData('hsize', hsize)
    TextComponent text
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
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    TextComponent point3
      disabled = True
      letterHeight = 0.05
      pos = (0, 0.4)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
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  Routine instruct_img
    ImageComponent image
      image = instruction.png
      size = (0.5, 0.5)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
      texture resolution = 512
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  Routine instructions_2
    TextComponent instructs_text_2
      letterHeight = 0.03
      pos = [0, -0.2]
      saveStartStop = False
      startVal [time (s)] = 0.0
      units = height
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      text [set every repeat]:
        If you touch only the empty circle, you will get a reward.

        If you touch the solid one or the overlapping part, you will get a loss.
    KeyboardComponent instruct_done_2
      allowedKeys = 'space'
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.0
      store = nothing
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    PolygonComponent instr_done_button_2
      fillColor = lightgreen
      lineColor = darkgreen
      pos = (0, -0.4)
      shape = rectangle
      size = (0.4, 0.1)
      startVal [time (s)] = 0.0
      units = height
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    TextComponent instr_done_label_2
      color = darkgreen
      letterHeight = 0.05
      pos = (0, -0.4)
      startVal [time (s)] = 0.0
      text = Next...
      units = height
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    MouseComponent instr_done_touch_2
      clickable = instr_done_button
      forceEndRoutineOnPress = valid click
      saveMouseState = final
      startVal [time (s)] = 0.0
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    ImageComponent image_4
      image = instru2.png
      pos = (0, .15)
      size = (0.7, 0.46)
      startVal [time (s)] = 0.0
      texture resolution = 512
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  Routine instructions_3
    TextComponent instructs_text_3
      letterHeight = 0.03
      saveStartStop = False
      startVal [time (s)] = 0.0
      units = height
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      text [set every repeat]:
        Try to win as many rewards and few losses as possible.

        (The amout of reward/loss is proportional to how accurate your move is)

        Please try to go as fast as possible.
    KeyboardComponent instruct_done_3
      allowedKeys = 'space'
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.0
      store = nothing
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    PolygonComponent instr_done_button_3
      fillColor = lightgreen
      lineColor = darkgreen
      pos = (0, -0.4)
      shape = rectangle
      size = (0.4, 0.1)
      startVal [time (s)] = 0.0
      units = height
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    TextComponent instr_done_label_3
      color = darkgreen
      letterHeight = 0.05
      pos = (0, -0.4)
      startVal [time (s)] = 0.0
      text = Next...
      units = height
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    MouseComponent instr_done_touch_3
      clickable = instr_done_button
      forceEndRoutineOnPress = valid click
      saveMouseState = final
      startVal [time (s)] = 0.0
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  Routine trial
    MouseComponent touch_resp
      clickable = solid,empty
      forceEndRoutineOnPress = any click
      saveMouseState = on click
      startVal [time (s)] = 0
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    CodeComponent check_correct
      Code Type = Both
      Before Experiment:
        import numpy as np

        # set points counter
        points = 0

        # block count
        block_cnt = 1
      Before JS Experiment:
        // set points counter
        var points;
        var block_cnt;
        points = 0;
        block_cnt = 1;
      Begin JS Routine:
        solid.setImage("img/solid.png");
        empty.setImage("img/empty.png");
        size = 0.3;
        solid.setSize([size, size]);
        empty.setSize([size, size]);
        x = 0;
        random = Math.random();
        if (random>0.5) {
            flip_flag = 1;
            }
        else {
            flip_flag = -1;
            }
        random2 = Math.random();
        solid_y = flip_flag * random2 * 0.3; // max 1
        y_diff = flip_flag * random2 * 0.07; // max 0.1
        //solid_x = np.random.normal((flip_flag * 0.5), 0.05);
        //x_diff = np.random.normal((flip_flag * 0.1), 0.05);
        empty_y = (solid_y - y_diff);
        solid.setPos([x, solid_y]);
        empty.setPos([x, empty_y]);
      Begin Routine:
        # set image
        solid.setImage('img/solid.png')
        empty.setImage('img/empty.png')

        # set size
        size = 0.3
        solid.setSize([size, size])
        empty.setSize([size, size])

        # set image location
        x = 0
        #solid_x = 0.5
        #x_diff = 0.1
        flip_flag = np.random.choice([-1,1],1)
        solid_y = np.random.normal(flip_flag * 0.25, 0.07)
        y_diff = np.random.normal(flip_flag * 0.05, 0.07)
        empty_y = solid_y - y_diff
        solid.setPos([x, solid_y])
        empty.setPos([x, empty_y])

        # show points
        #point0.setText('points: '+str(points))
        #point1.setText('points: '+str(points))
        #
      Each Frame:
        mouse_down_detected = False
        mouse_click = touch_resp.getPressed()

        if mouse_click[0]: # button 0 is pressed
            if not mouse_down_detected: # initial detection
                mouse_loc = touch_resp.getPos()
        #        mouse_click_locations.append(mouse_loc)
                mouse_down_detected = True
        else:
            mouse_down_detected = False
      Each JS Frame:
        mouse_down_detected = false;
        mouse_click = touch_resp.getPressed();
        if (mouse_click[0]) {
            if ((! mouse_down_detected)) {
                mouse_loc = touch_resp.getPos();
                mouse_down_detected = true;
            }
        } else {
            mouse_down_detected = false;
        }
    ImageComponent solid
      image = None
      size = (0.4, 0.4)
      startVal [time (s)] = 0
      texture resolution = 512
      units = height
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    ImageComponent empty
      image = None
      size = (0.4, 0.4)
      startVal [time (s)] = 0
      texture resolution = 512
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    TextComponent point1
      disabled = True
      letterHeight = 0.05
      pos = (0, 0.4)
      startVal [time (s)] = 0.0
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  Routine fixation_2
    TextComponent fixation_0
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      stopVal [time (s)] = 1
      text = +
      units = height
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    TextComponent point0
      disabled = True
      letterHeight = 0.05
      pos = (0, 0.4)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1
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  Routine setup
    CodeComponent code_JS
      Code Type = JS
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      Begin JS Experiment:
        thisExp = psychoJS.experiment;
        win = psychoJS.window;
        event = psychoJS.eventManager;
        Array.prototype.append = [].push;
        shuffle = util.shuffle;
    CodeComponent init_array
      Code Type = Auto->JS
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      Begin Experiment:
        progress = 0
  Routine final_score
    TextComponent score
      letterHeight = 0.06
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 5
      wrapWidth = 0.6
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    CodeComponent code
      Code Type = Auto->JS
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      Begin Routine:
        score.setText('You have earned '+str(points)+' points!'+
        '\nWell done!')
  Routine start_button
    MouseComponent start_press
      clickable = start_img
      forceEndRoutineOnPress = any click
      saveMouseState = final
      startVal [time (s)] = 0.0
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    ImageComponent start_img
      size = (0.5, 0.5)
      startVal [time (s)] = 0.0
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    CodeComponent code_4
      Code Type = Auto->JS
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      Begin Routine:
        if progress>0:
            start_img.setImage("img/go.png")
        else:
            start_img.setImage("img/start.png")
      Each Frame:
        countdown = round(1-t)
        if countdown==0 and progress>0:
            continueRoutine = False;
  Routine block_score
    TextComponent text_timer
      letterHeight = 0.05
      pos = (0, -0.2)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 9
      text [set every frame] = $timer_text
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    TextComponent block_cash
      letterHeight = 0.04
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 9
      wrapWidth = 0.6
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    CodeComponent code_2
      Code Type = Auto->JS
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      Begin Experiment:
        txt_part = ' '
      Begin Routine:
        ## set text
        #block_cash.setText(
        #'End of block, '+str(5-block_cnt)+' blocks left.'+
        ##'\nYou have earned '+str(points)+' points so far.\n'+
        #'\n'+
        #'\nTake a short break, press Start when you are ready.')
        #
        ## reset count
        #block_cnt += 1
        ##points = 0

        progress = progress + 25;
        progImg.setImage("img/p"+str(progress)+".png")
        if progress <100:
            txt_part = 'Well done! You are '+str(progress)+'% through! Keep going!'
            block_cash.setText(
            txt_part
            +'\n'+
            '\nYour current total is '+str(points)+' points.'+
            '\n'+
            '\nTake a short rest and get ready to play.')
        if progress==100:
            txt_part = 'Well done! You have finished the game. Please wait.'
            block_cash.setText(
            txt_part
            +'\n'+
            '\nYour total remaining is '+str(points)+' points.')
        # reset count
        #points = 0
    ImageComponent progImg
      pos = (0, -0.39)
      size = (0.5, 0.0758)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 9
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    CodeComponent code_5
      Code Type = Auto->JS
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      Begin Routine:
        timer_text = ''
      Each Frame:
        countdown = round(8.5-t)
        if countdown==0:
            if progress==100:
                timer_text=""
            else:
                timer_text="Go!"
        else:
            if progress==100:
                timer_text = "The game will end in: "+str(countdown) + ' seconds.'
            else:
                timer_text="The task will start again in: "+str(countdown) + ' seconds.'
  Routine info
    TextboxComponent textbox
      bold = False
      borderColor = aqua
      editable = True
      fillColor = gray
      letterHeight = 0.05
      padding = 0.1
      pos = (0, 0.33)
      size = (1, 0.12)
      startVal [time (s)] = 0.0
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    TextComponent text_2
      letterHeight = 0.08
      pos = (0, 0.35)
      startVal [time (s)] = 0.0
      text = Please enter your ID.
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    CodeComponent code_3
      Code Type = Both
      End JS Routine:
        psychoJS.experiment.addData("pid", textbox._pixi.text);
    PolygonComponent instr_done_button_4
      fillColor = lightgreen
      lineColor = darkgreen
      pos = (0, -0.4)
      shape = rectangle
      size = (0.4, 0.1)
      startVal [time (s)] = 0.0
      units = height
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    TextComponent instr_done_label_4
      color = darkgreen
      letterHeight = 0.05
      pos = (0, -0.4)
      startVal [time (s)] = 0.0
      text = Next...
      units = height
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    MouseComponent instr_done_touch_4
      clickable = instr_done_button_4
      forceEndRoutineOnPress = valid click
      saveMouseState = final
      startVal [time (s)] = 0.0
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  Routine welcome
    TextComponent text_3
      letterHeight = 0.04
      pos = (0, 0.12)
      startVal [time (s)] = 0.0
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      text:
        Welcome to the game! This should take about 8-10 minutes. There will be three breaks.
    PolygonComponent instr_done_button_5
      fillColor = lightgreen
      lineColor = darkgreen
      pos = (0, -0.4)
      shape = rectangle
      size = (0.4, 0.1)
      startVal [time (s)] = 0.0
      units = height
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    TextComponent instr_done_label_5
      color = darkgreen
      letterHeight = 0.05
      pos = (0, -0.4)
      startVal [time (s)] = 0.0
      text = Next...
      units = height
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    MouseComponent instr_done_touch_5
      clickable = instr_done_button_5
      forceEndRoutineOnPress = valid click
      saveMouseState = final
      startVal [time (s)] = 0.0
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Flow
  Routine setup
  LoopInitiator trials_2 loopType="TrialHandler"
    conditionsFile = instructions.xlsx
    loopType = sequential
    nReps = 1
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    conditions:
      [{'Instruction': 'You are driving along a dangerous road in a foreign country. You have 600 coins.', 'Images': 'img/steering-wheel.png'},
      {'Instruction': 'You are in danger to be hit by large rocks. When a rock falls on you, you will lose 10 coins.', 'Images': 'img/stone.png'},
      {'Instruction': "Road signs indicate whether the road is dangerous or safe. The problem is that you don't know in advance what the signs mean, and sometimes they can be a bit unclear.", 'Images': 'img/spiky.png'},
      {'Instruction': 'When you see a sign, you can deploy a shield to protect yourself from the rocks, at the cost of 2 points each.', 'Images': 'img/shield.png'},
      {'Instruction': 'Simply tap on the shield to deploy it. Your shield usage and coins will be displayed.', 'Images': 'img/shield.png'},
      {'Instruction': 'You need to save as many coins as you can. You will need to figure out which signs indicate danger in order to deploy the shield to protect yourself.', 'Images': 'img/notSpiky.png'}]
    Routine instructions
  LoopTerminator trials_2
  LoopInitiator blocks loopType="TrialHandler"
    conditionsFile = blocks/blocks_order.xlsx
    isTrials = False
    loopType = sequential
    nReps = 1
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    conditions:
      [{'condsFile': 'blocks/conds_file_1.xlsx'},
      {'condsFile': 'blocks/conds_file_2.xlsx'},
      {'condsFile': 'blocks/conds_file_3.xlsx'},
      {'condsFile': 'blocks/conds_file_4.xlsx'}]
    Routine start_button
    LoopInitiator trials loopType="TrialHandler"
      conditionsFile = $condsFile
      loopType = sequential
      nReps = 1
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      Routine fixation_2
      Routine trial
      Routine pop_2
    LoopTerminator trials
    Routine block_score
  LoopTerminator blocks
  Routine final_score
  Routine end_thanks
